PsychoPy2experiment version="3.0.0b8"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1800, 1200]
  expName = corsi
  exportHTML = manually
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Routines
  Routine trial
    PolygonComponent blk1
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk4
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk5
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse
      clickable = blk1, blk2, blk3, blk4, blk5
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [condition] = doingResponse
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    CodeComponent updateBlocks
      Code Type = JS
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      Begin JS Routine:
        // initial state
        blkIndex = 0;
        nextSwitch = my.blockDuration;
        doingResponse = false;
        currBlock = undefined;

        // store blocks as a dictionary (to switch between name/object)
        blocks = {};
        blocks['blk1']=my.blk1;
        blocks['blk2']=my.blk2;
        blocks['blk3']=my.blk3;
        blocks['blk4']=my.blk4;
        blocks['blk5']=my.blk5;

        // Create grid of locations with jitter
        let xGrid = [-.3, 0, .3];
        let yGrid = [-.3, 0, .3];
        let locations = [];
        for (let x in xGrid) {
            for (let y in yGrid) {
                locations.push([xGrid[x]+Math.random(2)*.1 -.05, yGrid[y]+Math.random(2)*.1 -.05]);
            }
        }

        // Shuffle locations
        for (let rolls in my.blocks) {
            locations = locations.sort(function() { return 0.5 - Math.random()});
        }
        var counter = 0;  // location index

        // give blocks a new set of random locations
        for (let items in my.blocks) {
            if (blocks[items].hasOwnProperty('pos')) {
                blocks[items].pos = locations[counter];
                counter = counter + 1;
            }
            if (blocks[items].hasOwnProperty('fillColor')) {
                blocks[items].fillColor = new Color('white');
                blocks[items].lineColor = new Color('white');
            }
        }

        sequence = ["blk1", "blk2", "blk3", "blk4", "blk5"]
      Each JS Frame:
        if (!(doingResponse) && (t > nextSwitch)) {
            if (typeof my.currBlock != 'undefined') {
                // reset color of current block
                currBlock.fillColor =  new Color('white');
                currBlock.lineColor =  new Color('white');
            }
            // then change current block and make that red
            if (blkIndex >= Object.keys(blocks).length) {
                doingResponse = true;  // no more blocks to show
            } else {
                currBlockName = my.sequence[my.blkIndex];
                currBlock = my.blocks[my.currBlockName];
                currBlock.fillColor = new Color('red');
                currBlock.lineColor = new Color('red');
                // track time of this change
                nextSwitch = parseFloat(nextSwitch) + parseFloat(blockDuration);
            }
            blkIndex = blkIndex + 1;
        }

        // all clicked?
        if (mouse.clicked_name.length >= sequence.length) {
            continueRoutine = false;
        }

        // update color of clicked
        for (let blockName in my.mouse.clicked_name) {
            for (let eachBlock in my.blocks) {
                if (mouse.clicked_name[blockName] == blocks[eachBlock].name) {
                    blocks[eachBlock].fillColor = new Color('silver');
                    blocks[eachBlock].lineColor = new Color('silver');
                }
            }
        }
  Routine ISI
    TextComponent blank
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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      text:
        Great! Thanks for your help!

        All done!
  Routine instructions
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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      text:
        On each trial, watch the sequence of squares flashing red. When the sequence finishes try to click the same sequence.

        When you've made the same number of clicks as the original sequence the next trial will start.

        To make it easier squares will change color after you click them

        Press any key to get started
    KeyboardComponent endInstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditions = [OrderedDict([('sequence', ['blk1', 'blk2', 'blk3', 'blk4', 'blk5'])])]
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    Routine ISI
    Routine trial
  LoopTerminator trials
  Routine thanks
